---
API: 2
OpenSesame: 3.0.7
Platform: posix
---
set width 1400
set uniform_coordinates yes
set title "Fraction component detection task"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1000
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/mathcog/github/sft-fraction/procedure"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background "#808080"

define loop block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles 216
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response "l"
	setcycle 0 target "present"
	setcycle 0 numSalience "high"
	setcycle 0 denomColor "#000000"
	setcycle 0 denominator "6"
	setcycle 0 numerator "6"
	setcycle 0 denomSalience "high"
	setcycle 0 numColor "#000000"
	setcycle 1 correct_response "l"
	setcycle 1 target "present"
	setcycle 1 numSalience "high"
	setcycle 1 denomColor "#000000"
	setcycle 1 denominator "7"
	setcycle 1 numerator "6"
	setcycle 1 denomSalience "high"
	setcycle 1 numColor "#000000"
	setcycle 2 correct_response "l"
	setcycle 2 target "present"
	setcycle 2 numSalience "high"
	setcycle 2 denomColor "#000000"
	setcycle 2 denominator "8"
	setcycle 2 numerator "6"
	setcycle 2 denomSalience "high"
	setcycle 2 numColor "#000000"
	setcycle 3 correct_response "l"
	setcycle 3 target "present"
	setcycle 3 numSalience "high"
	setcycle 3 denomColor "#000000"
	setcycle 3 denominator "6"
	setcycle 3 numerator "7"
	setcycle 3 denomSalience "high"
	setcycle 3 numColor "#000000"
	setcycle 4 correct_response "l"
	setcycle 4 target "present"
	setcycle 4 numSalience "high"
	setcycle 4 denomColor "#000000"
	setcycle 4 denominator "7"
	setcycle 4 numerator "7"
	setcycle 4 denomSalience "high"
	setcycle 4 numColor "#000000"
	setcycle 5 correct_response "l"
	setcycle 5 target "present"
	setcycle 5 numSalience "high"
	setcycle 5 denomColor "#000000"
	setcycle 5 denominator "8"
	setcycle 5 numerator "7"
	setcycle 5 denomSalience "high"
	setcycle 5 numColor "#000000"
	setcycle 6 correct_response "l"
	setcycle 6 target "present"
	setcycle 6 numSalience "high"
	setcycle 6 denomColor "#000000"
	setcycle 6 denominator "6"
	setcycle 6 numerator "8"
	setcycle 6 denomSalience "high"
	setcycle 6 numColor "#000000"
	setcycle 7 correct_response "l"
	setcycle 7 target "present"
	setcycle 7 numSalience "high"
	setcycle 7 denomColor "#000000"
	setcycle 7 denominator "7"
	setcycle 7 numerator "8"
	setcycle 7 denomSalience "high"
	setcycle 7 numColor "#000000"
	setcycle 8 correct_response "l"
	setcycle 8 target "present"
	setcycle 8 numSalience "high"
	setcycle 8 denomColor "#000000"
	setcycle 8 denominator "8"
	setcycle 8 numerator "8"
	setcycle 8 denomSalience "high"
	setcycle 8 numColor "#000000"
	setcycle 9 correct_response "l"
	setcycle 9 target "present"
	setcycle 9 numSalience "high"
	setcycle 9 denomColor "#000000"
	setcycle 9 denominator "2"
	setcycle 9 numerator "6"
	setcycle 9 denomSalience "high"
	setcycle 9 numColor "#000000"
	setcycle 10 correct_response "l"
	setcycle 10 target "present"
	setcycle 10 numSalience "high"
	setcycle 10 denomColor "#000000"
	setcycle 10 denominator "3"
	setcycle 10 numerator "6"
	setcycle 10 denomSalience "high"
	setcycle 10 numColor "#000000"
	setcycle 11 correct_response "l"
	setcycle 11 target "present"
	setcycle 11 numSalience "high"
	setcycle 11 denomColor "#000000"
	setcycle 11 denominator "4"
	setcycle 11 numerator "6"
	setcycle 11 denomSalience "high"
	setcycle 11 numColor "#000000"
	setcycle 12 correct_response "l"
	setcycle 12 target "present"
	setcycle 12 numSalience "high"
	setcycle 12 denomColor "#000000"
	setcycle 12 denominator "2"
	setcycle 12 numerator "7"
	setcycle 12 denomSalience "high"
	setcycle 12 numColor "#000000"
	setcycle 13 correct_response "l"
	setcycle 13 target "present"
	setcycle 13 numSalience "high"
	setcycle 13 denomColor "#000000"
	setcycle 13 denominator "3"
	setcycle 13 numerator "7"
	setcycle 13 denomSalience "high"
	setcycle 13 numColor "#000000"
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	setcycle 21 correct_response "l"
	setcycle 21 target "present"
	setcycle 21 numSalience "high"
	setcycle 21 denomColor "#000000"
	setcycle 21 denominator "6"
	setcycle 21 numerator "3"
	setcycle 21 denomSalience "high"
	setcycle 21 numColor "#000000"
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	setcycle 24 correct_response "l"
	setcycle 24 target "present"
	setcycle 24 numSalience "high"
	setcycle 24 denomColor "#000000"
	setcycle 24 denominator "6"
	setcycle 24 numerator "4"
	setcycle 24 denomSalience "high"
	setcycle 24 numColor "#000000"
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	setcycle 27 correct_response "a"
	setcycle 27 target "absent"
	setcycle 27 numSalience "high"
	setcycle 27 denomColor "#000000"
	setcycle 27 denominator "2"
	setcycle 27 numerator "2"
	setcycle 27 denomSalience "high"
	setcycle 27 numColor "#000000"
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	setcycle 54 correct_response "l"
	setcycle 54 target "present"
	setcycle 54 numSalience "low"
	setcycle 54 denomColor "#000000"
	setcycle 54 denominator "6"
	setcycle 54 numerator "6"
	setcycle 54 denomSalience "high"
	setcycle 54 numColor "#757575"
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	setcycle 81 correct_response "a"
	setcycle 81 target "absent"
	setcycle 81 numSalience "low"
	setcycle 81 denomColor "#000000"
	setcycle 81 denominator "2"
	setcycle 81 numerator "2"
	setcycle 81 denomSalience "high"
	setcycle 81 numColor "#757575"
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	setcycle 108 correct_response "l"
	setcycle 108 target "present"
	setcycle 108 numSalience "high"
	setcycle 108 denomColor "#757575"
	setcycle 108 denominator "6"
	setcycle 108 numerator "6"
	setcycle 108 denomSalience "low"
	setcycle 108 numColor "#000000"
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	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_loop always
	run rest always

define sketchpad end_of_experiment
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="The experiment has now ended.<br /><br />Thank you for your participation!" x=0 y=0 z_index=0

define sketchpad error
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=RED font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text=X x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions1 always
	run instructions2 always
	run instructions3 always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source table
	set skip 0
	set repeat 10
	set order random
	set offset no
	set item block_sequence
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run block_sequence

define sketchpad fixation_dot
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad fraction
	set duration 0
	set description "Displays stimuli"
	draw line color=black penwidth=2 show_if=always x1=-32 x2=32 y1=0 y2=0 z_index=0
	draw textline center=1 color="[numColor]" font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[numerator]" x=0 y=-64 z_index=0
	draw textline center=1 color="[denomColor]" font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[denominator]" x=0 y=64 z_index=0

define sketchpad instructions1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="The purpose of this experiment is to<br />investigate how people perceive fractions.<br /><br />On each trial, you will be presented with <br />a fraction in the center of the screen.<br /><br />Your task is to quickly and accurately<br />decide whether EITHER the numerator<br />or the denominator contains a number<br />greater than 5.<br /><br />(press the spacebar to continue)" x=0 y=0 z_index=0

define sketchpad instructions2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="If EITHER the numerator or denominator (or both) <br />is GREATER THAN 5, you will press<br />the L key with your right index finger.<br /><br />If they are both LESS THAN 5, you will press the A key<br />with your left index finger.<br /><br />(press the spacebar to continue)<br />" x=0 y=0 z_index=0

define sketchpad instructions3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Remember:<br /><br />either greater than 5 -- press L<br />both less than 5 -- press A<br /><br />You will now complete several blocks of <br />these trials.  You may notice that some of the <br />fractions appear in a lighter shade than<br />others.  This is perfectly normal, and you <br />do not need to worry about it.<br /><br />You will have the opportunity to take breaks along<br />the way.  Remember to be quick, but accurate.<br /><br />When you are ready to begin, place your index <br />fingers on the A and L keys, and press one <br />of those keys to initiate the first trial.<br />" x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "a;l"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad rest
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="You may take a short break.<br />Press any key when you are ready<br />to begin the next block of trials." x=0 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_dot always
	run fraction always
	run keyboard_response always
	run logger always
	run error "[correct]=0"

